/* Dentage Gyrus Granule Cell model associated with the papers: 

J. Tejada, G.M. Arisi, N. Garcia-Cairasco, A.C. Roque, Morphological alterations in newly born dentate gyrus granule cells that emerge after status epilepticus contribute to make them less excitable, PLoS ONE. 7 (2012) e40726. doi:10.1371/journal.pone.0040726.

J. Tejada, N. Garcia-Cairasco, A.C. Roque, Combined role of seizure-induced dendritic morphology alterations and spine loss in newborn granule cells with mossy fiber sprouting on the hyperexcitability of a computer model of the dentate gyrus, PLoS Comput. Biol. 10 (2014) e1003601. doi:10.1371/journal.pcbi.1003601.

julian.tejada@gmail.com - 2014  */
//Defining granule cell

	begintemplate GranuleCell84

// Original name on neuroMorpho.org n226.hoc


ndend1=42

  
public  pre_list, connect_pre, subsets, is_art, is_connected
public  vbc2gc, vmc2gc, vhc2gc, vgc2bc, vbc2bc, vmc2bc, vhc2bc, vgc2mc, vbc2mc, vmc2mc, vhc2mc, vgc2hc, vmc2hc
public soma, dend
public all, gcldend, pdend, mdend, ddend, somas

nst=10
	objectvar stim[nst]
double stimdur[nst], stimdel[nst], stimamp[nst]
public stim, stimdur, stimamp, stimdel
create soma[4], dend[ndend1]
objref syn, pre_list


proc init() {
	pre_list = new List()
	subsets()
	gctemp()
	synapse()
}
objref all, gcldend, pdend, mdend, ddend, somas
proc subsets(){ local i
	objref all, gcldend, pdend, mdend, ddend, somas
	all = new SectionList()
		for i=0, 3  soma[i] all.append()
		for i=0, 41 dend[i] all.append()

	somas = new SectionList()
		for i=0, 3  soma[i] somas.append()
	
	gcldend  = new SectionList()
		dend[0] gcldend.append()
		dend[19] gcldend.append()


	pdend  = new SectionList()
		
		dend[1] pdend.append()
		dend[6] pdend.append()
		for i=20, 21  dend[i] pdend.append()
		dend[28] pdend.append()
		for i=34, 36  dend[i] pdend.append()


	mdend  = new SectionList()
		for i=2, 3  dend[i] mdend.append()
		dend[5] mdend.append()
		for i=7, 8  dend[i] mdend.append()
		dend[13] mdend.append()
		dend[16] mdend.append()
		dend[23] mdend.append()      
		dend[29] mdend.append()

	ddend  = new SectionList()
		
		dend[4] ddend.append()
		for i=9, 12 dend[i] ddend.append()
		for i=14, 15 dend[i] ddend.append()
		for i=17, 18 dend[i] ddend.append()
		dend[22] ddend.append()
		for i=24, 27 dend[i] ddend.append()
		for i=30, 33 dend[i] ddend.append()
		for i=37, 41 dend[i] ddend.append()

}
proc gctemp() {

    
	forsec all {
		insert ccanl
	catau_ccanl = 10
	caiinf_ccanl = 0.000005
	Ra=210
	}

	forsec somas {insert ichan2  //ildikos ichan
	gnatbar_ichan2=0.12  //original 0.030 to .055 
	gkfbar_ichan2=0.016  //original 0.015
	gksbar_ichan2=0.006
		insert borgka
	gkabar_borgka=0.012
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.002  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.005
		insert cat
	gcatbar_cat=0.000037
		insert gskch
	gskbar_gskch=0.001
		insert cagk
	gkbar_cagk=0.0006
	gl_ichan2 = 0.00004
	cm=1

} 

		forsec gcldend {insert ichan2
	gnatbar_ichan2=0.018  //original 0.015
	gkfbar_ichan2=0.004
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.003  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0075
		insert cat
	gcatbar_cat=0.000075
		insert gskch
	gskbar_gskch=0.0004
		insert cagk
	gkbar_cagk=0.0006
	gl_ichan2 = 0.00004
	cm=1}
		
		forsec pdend {insert ichan2
	gnatbar_ichan2=0.013 
	gkfbar_ichan2=0.004
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0075
		insert cat
	gcatbar_cat=0.00025
		insert gskch
	gskbar_gskch=0.0002
		insert cagk
	gkbar_cagk=0.001
	gl_ichan2 = 0.000063
	cm=1.0 
        insert pas 
      g_pas = 4e-05
	}
		
	 	forsec mdend {insert ichan2
	gnatbar_ichan2=0.008 
	gkfbar_ichan2=0.001
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0005
		insert cat
	gcatbar_cat=0.0005
		insert gskch
	gskbar_gskch=0.0
		insert cagk
	gkbar_cagk=0.0024
	gl_ichan2 = 0.000063

	cm=1.0 
        insert pas 
      g_pas = 4e-05}

		forsec ddend {insert ichan2
	gnatbar_ichan2=0.008 
	gkfbar_ichan2=0.001
	gksbar_ichan2=0.008
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0
		insert cat
	gcatbar_cat=0.001
		insert gskch
	gskbar_gskch=0.0
		insert cagk
	gkbar_cagk=0.0024
	gl_ichan2 = 0.000063
	cm=1.0 
        insert pas 
      g_pas = 4e-05}
		
	
// 	forsec all {
// 		insert ccanl
// 	catau_ccanl = 10
// 	caiinf_ccanl = 0.000005
// 	Ra=210
// 	}

	 forsec all {enat = 45 ekf = -90 eks = -90  ek=-90  elca=130 etca=130	 esk=-90
		 el_ichan2 =-70	cao_ccanl=2 }


  for i = 1, 2 connect soma[i](0), soma(1)
  connect soma[3](0), soma(0)
  connect dend(0), soma[1](1)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  connect dend[6](0), dend(1)
  for i = 7, 10 connect dend[i](0), dend[i-1](1)
  connect dend[11](0), dend[9](1)
  connect dend[12](0), dend[8](1)
  connect dend[13](0), dend[7](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), dend[6](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), soma[2](1)
  for i = 20, 22 connect dend[i](0), dend[i-1](1)
  connect dend[23](0), dend[21](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  connect dend[28](0), dend[20](1)
  for i = 29, 31 connect dend[i](0), dend[i-1](1)
  connect dend[32](0), dend[30](1)
  connect dend[33](0), dend[29](1)
  connect dend[34](0), dend[28](1)
  connect dend[35](0), dend[19](1)
  for i = 36, 37 connect dend[i](0), dend[35](1)
  for i = 38, 39 connect dend[i](0), dend[i-1](1)
  connect dend[40](0), dend[38](1)
  connect dend[41](0), dend[37](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(1.988, 0.192, 0, 11.82)
	pt3dadd(1.796, 3.536, 0, 11.82)
  }
  soma[1] {pt3dclear()
	pt3dadd(1.796, 3.536, 0, 11.82)
	pt3dadd(1.796, 4.423, 0, 11.82)
	pt3dadd(1.796, 5.311, 0, 11.82)
	pt3dadd(2.065, 5.348, 0.186, 1.774)
  }
  dend {pt3dclear()
	pt3dadd(2.065, 5.348, 0.186, 1.34)
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  }
}
proc shape3d_2() {
  dend[3] {	pt3dadd(37.29, 139.848, 19.92, 0.54)
	pt3dadd(37.29, 140.447, 19.92, 0.54)
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  }
}
proc shape3d_3() {
  dend[4] {	pt3dadd(69.009, 336.751, 13.12, 0.18)
	pt3dadd(70.003, 339.113, 13.12, 0.18)
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  }
}
proc shape3d_4() {
  dend[8] {	pt3dadd(85.156, 145.159, -12.4, 0.54)
	pt3dadd(85.36, 145.555, -12.4, 0.54)
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  }
}
proc shape3d_5() {
  dend[11] {	pt3dadd(84.365, 306.263, -1.2, 0.18)
	pt3dadd(84.557, 307.631, -1.2, 0.18)
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  }
}
proc shape3d_6() {
  dend[13] {	pt3dadd(72.591, 153.035, -29.6, 0.18)
	pt3dadd(72.794, 153.623, -29.6, 0.18)
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  }
}
proc shape3d_7() {
  dend[15] {	pt3dadd(19.741, 324.355, -52, 0.18)
	pt3dadd(19.549, 324.355, -52, 0.18)
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  }
}
proc shape3d_8() {
  dend[18] {	pt3dadd(-29.911, 249.221, -24.48, 0.18)
	pt3dadd(-30.509, 249.809, -24.48, 0.18)
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  }
}
proc shape3d_9() {
  dend[22] {	pt3dadd(-28.125, 95.993, 7.52, 0.18)
	pt3dadd(-29.312, 102.479, 7.52, 0.18)
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  }
}
proc shape3d_10() {
  dend[24] {	pt3dadd(-29.12, 353.859, 14.4, 0.18)
	pt3dadd(-29.12, 354.447, 14.4, 0.18)
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  }
}
proc shape3d_11() {
  dend[29] {	pt3dadd(-141.6, 111.53, 41.52, 0.18)
	pt3dadd(-143.995, 114.672, 45.52, 0.18)
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  }
}
proc shape3d_12() {
  dend[33] {	pt3dadd(-169.725, 142.413, 47.92, 0.18)
	pt3dadd(-170.912, 142.21, 47.52, 0.18)
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  }
}
proc shape3d_13() {
  dend[36] {	pt3dadd(-16.95, 37.764, 47.6, 0.18)
	pt3dadd(-17.153, 38.16, 47.6, 0.18)
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  }
}
proc shape3d_14() {
  dend[40] {	pt3dadd(-135.261, 268.307, 100.8, 0.18)
	pt3dadd(-135.633, 270.849, 100.8, 0.18)
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  }
}
proc shape3d_15() {
  soma[3] {	pt3dadd(6.181, -9.243, 0.04, 5.48)
  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
}

proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma $o2 = new NetCon (&v(1), $o1)
	//alternative statement		$o1.soma pre_list.append(new NetCon(soma.v(1),syn,0,Delsyn,0))
	}

	objref syn
	objref DistalSynapses 
	objref DistalSynapsePositions 
	objref ProximalSynapses 
	objref ProximalSynapsePositions 
	proc synapse() {
	
 
 // //***** PP syn   
 
DistalSynapses = new Vector(0,0) 
DistalSynapses .append(4, 5, 9,10,11,12,13,14,15,16,17,18,22,23,24,25,26,27,29,30,31,32,33,37,38,39,40,41) 
DistalSynapsePositions = new Vector(0,0) 
DistalSynapsePositions .append(0.51736,0.66465,0.56369,    0.5,    0.5,0.53405, 0.7326,    0.5,    0.5,0.89905,    0.5,    0.5,0.79106,0.87287,    0.5,    0.5,    0.5,    0.5,0.91413,    0.5,    0.5,    0.5,    0.5,0.74504,    0.5,    0.5,    0.5,    0.5) 
for i= 0 , 27 { 
dend[DistalSynapses .x[i]] syn = new Exp2Syn(DistalSynapsePositions .x[i]) // PP syn based on Greg and Staley 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0  
pre_list.append(syn) // # 0  
} 
 
 // //***** MC syn   
 
ProximalSynapses = new Vector(0,0) 
ProximalSynapses .append(0, 1, 2, 3, 6, 7,16,19,20,21,28,29,34,35) 
ProximalSynapsePositions = new Vector(0,0) 
ProximalSynapsePositions .append(0.5,    0.5,0.12443,    0.092881,    0.5,0.16041,    0.098703,    0.5,    0.5,0.25735,    0.5,    0.045417,0.17435, 0.2567) 
for i= 0 , 13 { 
dend[ProximalSynapses .x[i]] syn = new Exp2Syn(ProximalSynapsePositions .x[i]) // // MC syn *** Estimated 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0 
pre_list.append(syn) // #  
} 
 
 // //***** HIPP   
 
for i= 0 , 27 { 
dend[DistalSynapses .x[i]] syn = new Exp2Syn(DistalSynapsePositions .x[i]) // HIPP  
syn.tau1 = 0.5	syn.tau2 = 6	syn.e = -70 
pre_list.append(syn) // # 41 
} 
 
 // //***** BC syn   
 
soma syn = new Exp2Syn(0.5) // BC  syn syn based on Bartos 
syn.tau1 = 0.26	syn.tau2 = 5.5	syn.e = -70 
pre_list.append(syn) // # 42 
 
 // //***** Sprout   
 
for i= 0 , 13 { 
dend[ProximalSynapses .x[i]] syn = new Exp2Syn(ProximalSynapsePositions .x[i]) // // MC syn *** Estimated 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0 
pre_list.append(syn) // # 42 
} 

	  
}
	func is_art() { return 0 }

	endtemplate GranuleCell84
//************************************************************************************************************