/* Dentage Gyrus Granule Cell model associated with the papers: 

J. Tejada, G.M. Arisi, N. Garcia-Cairasco, A.C. Roque, Morphological alterations in newly born dentate gyrus granule cells that emerge after status epilepticus contribute to make them less excitable, PLoS ONE. 7 (2012) e40726. doi:10.1371/journal.pone.0040726.

J. Tejada, N. Garcia-Cairasco, A.C. Roque, Combined role of seizure-induced dendritic morphology alterations and spine loss in newborn granule cells with mossy fiber sprouting on the hyperexcitability of a computer model of the dentate gyrus, PLoS Comput. Biol. 10 (2014) e1003601. doi:10.1371/journal.pcbi.1003601.

julian.tejada@gmail.com - 2014  */
//Defining granule cell

	begintemplate GranuleCell86

// Original name on neuroMorpho.org n242.CNG.swc

ndend1=38

  
public  pre_list, connect_pre, subsets, is_art, is_connected
public  vbc2gc, vmc2gc, vhc2gc, vgc2bc, vbc2bc, vmc2bc, vhc2bc, vgc2mc, vbc2mc, vmc2mc, vhc2mc, vgc2hc, vmc2hc
public soma, dend
public all, gcldend, pdend, mdend, ddend, somas

nst=10
	objectvar stim[nst]
double stimdur[nst], stimdel[nst], stimamp[nst]
public stim, stimdur, stimamp, stimdel
create soma[5], dend[ndend1]
objref syn, pre_list


proc init() {
	pre_list = new List()
	subsets()
	gctemp()
	synapse()
}
objref all, gcldend, pdend, mdend, ddend, somas
proc subsets(){ local i
	objref all, gcldend, pdend, mdend, ddend, somas
	all = new SectionList()
		for i=0, 4  soma[i] all.append()
		for i=0, 37 dend[i] all.append()

	somas = new SectionList()
		for i=0, 4  soma[i] somas.append()
	

	gcldend  = new SectionList()
		dend[0] gcldend.append()
		dend[19] gcldend.append()
		dend[26] gcldend.append()
		dend[31] gcldend.append()


	pdend  = new SectionList()
		dend[10] pdend.append()
		

	mdend  = new SectionList()
	        dend[1] mdend.append()
		dend[5] mdend.append()
		dend[9] mdend.append()
		dend[11] mdend.append()
		dend[20] mdend.append()
		dend[33] mdend.append()
		dend[35] mdend.append()

	ddend  = new SectionList()
		
		for i=2, 4 dend[i] ddend.append()
		for i=6, 8 dend[i] ddend.append()
		for i=12, 18 dend[i] ddend.append()
		for i=21, 25 dend[i] ddend.append()
		for i=27, 30 dend[i] ddend.append()
		dend[32] ddend.append()
		dend[34] ddend.append()
		for i=36, 37 dend[i] ddend.append()

}
proc gctemp() {

    
	forsec all {
		insert ccanl
	catau_ccanl = 10
	caiinf_ccanl = 0.000005
	Ra=210
	}

	forsec somas {insert ichan2  //ildikos ichan
	gnatbar_ichan2=0.12  //original 0.030 to .055 
	gkfbar_ichan2=0.016  //original 0.015
	gksbar_ichan2=0.006
		insert borgka
	gkabar_borgka=0.012
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.002  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.005
		insert cat
	gcatbar_cat=0.000037
		insert gskch
	gskbar_gskch=0.001
		insert cagk
	gkbar_cagk=0.0006
	gl_ichan2 = 0.00004
	cm=1

} 

		forsec gcldend {insert ichan2
	gnatbar_ichan2=0.018  //original 0.015
	gkfbar_ichan2=0.004
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.003  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0075
		insert cat
	gcatbar_cat=0.000075
		insert gskch
	gskbar_gskch=0.0004
		insert cagk
	gkbar_cagk=0.0006
	gl_ichan2 = 0.00004
	cm=1}
		
		forsec pdend {insert ichan2
	gnatbar_ichan2=0.013 
	gkfbar_ichan2=0.004
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0075
		insert cat
	gcatbar_cat=0.00025
		insert gskch
	gskbar_gskch=0.0002
		insert cagk
	gkbar_cagk=0.001
	gl_ichan2 = 0.000063
	cm=1.0 
        insert pas 
      g_pas = 4e-05
	}
		
	 	forsec mdend {insert ichan2
	gnatbar_ichan2=0.008 
	gkfbar_ichan2=0.001
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0005
		insert cat
	gcatbar_cat=0.0005
		insert gskch
	gskbar_gskch=0.0
		insert cagk
	gkbar_cagk=0.0024
	gl_ichan2 = 0.000063

	cm=1.0 
        insert pas 
      g_pas = 4e-05}

		forsec ddend {insert ichan2
	gnatbar_ichan2=0.008 
	gkfbar_ichan2=0.001
	gksbar_ichan2=0.008
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0
		insert cat
	gcatbar_cat=0.001
		insert gskch
	gskbar_gskch=0.0
		insert cagk
	gkbar_cagk=0.0024
	gl_ichan2 = 0.000063
	cm=1.0 
        insert pas 
      g_pas = 4e-05}
		
	
// 	forsec all {
// 		insert ccanl
// 	catau_ccanl = 10
// 	caiinf_ccanl = 0.000005
// 	Ra=210
// 	}

	 forsec all {enat = 45 ekf = -90 eks = -90  ek=-90  elca=130 etca=130	 esk=-90
		 el_ichan2 =-70	cao_ccanl=2 }


  for i = 1, 2 connect soma[i](0), soma[i-1](1)
  connect soma[3](0), soma[1](1)
  connect soma[4](0), soma(0)
  connect dend(0), soma(1)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  connect dend[9](0), dend[5](1)
  connect dend[10](0), dend(1)
  for i = 11, 12 connect dend[i](0), dend[i-1](1)
  connect dend[13](0), dend[11](1)
  connect dend[14](0), dend[10](1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), soma[2](1)
  for i = 20, 21 connect dend[i](0), dend[i-1](1)
  connect dend[22](0), dend[20](1)
  for i = 23, 24 connect dend[i](0), dend[22](1)
  connect dend[25](0), dend[19](1)
  connect dend[26](0), soma[3](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  for i = 29, 30 connect dend[i](0), dend[28](1)
  connect dend[31](0), soma[3](1)
  for i = 32, 33 connect dend[i](0), dend[31](1)
  for i = 34, 35 connect dend[i](0), dend[33](1)
  for i = 36, 37 connect dend[i](0), dend[35](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(1.762, 1.887, 0, 14.22)
	pt3dadd(0.881, 0.711, 0, 14.22)
	pt3dadd(-0.655, -0.237, 0, 14.22)
  }
  dend {pt3dclear()
	pt3dadd(-0.655, -0.237, 0, 6.41)
	pt3dadd(-0.124, -0.92, -0.148, 6.41)
	pt3dadd(5.943, -5.423, 4.4, 4.48)
	pt3dadd(5.943, -5.661, 4.4, 4.48)
	pt3dadd(6.158, -5.898, 4.4, 4.48)
	pt3dadd(6.384, -6.135, 4.4, 4.48)
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  }
}
proc shape3d_2() {
  dend[1] {	pt3dadd(18.486, -42.702, 20.4, 0.98)
	pt3dadd(18.712, -42.94, 20.4, 0.98)
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  }
}
proc shape3d_3() {
  dend[2] {	pt3dadd(29.379, -132.3, 46.4, 0.98)
	pt3dadd(29.413, -132.526, 46.4, 0.98)
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  }
}
proc shape3d_4() {
  dend[3] {	pt3dadd(23.492, -214.259, 84, 0.6)
	pt3dadd(23.515, -214.485, 84, 0.6)
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  }
}
proc shape3d_5() {
  dend[4] {	pt3dadd(22.498, -216.304, 82.4, 0.98)
	pt3dadd(22.52, -216.541, 82.4, 0.98)
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  }
}
proc shape3d_6() {
  dend[4] {	pt3dadd(-4.214, -299.89, 100.72, 0.98)
	pt3dadd(-4.621, -300.184, 100.72, 0.98)
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  }
}
proc shape3d_7() {
  dend[6] {	pt3dadd(8.667, -158.663, 94, 0.98)
	pt3dadd(8.237, -158.731, 94, 0.98)
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  }
}
proc shape3d_8() {
  dend[7] {	pt3dadd(-44.973, -234.418, 106, 0.98)
	pt3dadd(-45.38, -234.712, 106, 0.98)
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  }
}
proc shape3d_9() {
  dend[8] {	pt3dadd(-12.068, -217.4, 88.8, 0.98)
	pt3dadd(-12.407, -218.169, 88.8, 0.98)
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  }
}
proc shape3d_10() {
  dend[10] {	pt3dadd(21.571, -32.555, -9.6, 1.76)
	pt3dadd(21.571, -33.029, -9.6, 1.76)
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  }
}
proc shape3d_11() {
  dend[11] {	pt3dadd(-0.44, -140.131, -9.6, 1.36)
	pt3dadd(-0.44, -140.368, -9.6, 1.36)
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  }
}
proc shape3d_12() {
  dend[12] {	pt3dadd(-70.444, -266.352, -3.6, 0.98)
	pt3dadd(-70.658, -266.826, -3.6, 0.98)
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  }
}
proc shape3d_13() {
  dend[13] {	pt3dadd(-18.486, -240.87, -12.8, 0.98)
	pt3dadd(-18.712, -241.819, -12.8, 0.98)
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  }
}
proc shape3d_14() {
  dend[14] {	pt3dadd(49.087, -81.156, -10, 0.98)
	pt3dadd(49.753, -81.868, -10, 0.98)
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  }
}
proc shape3d_15() {
  dend[15] {	pt3dadd(93.993, -222.937, -7.28, 0.6)
	pt3dadd(93.993, -223.174, -7.28, 0.6)
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  }
}
proc shape3d_16() {
  dend[15] {	pt3dadd(65.596, -318.253, 20.72, 0.6)
	pt3dadd(65.381, -318.49, 20.72, 0.6)
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  }
}
proc shape3d_17() {
  dend[16] {	pt3dadd(117.327, -271.301, 17.2, 0.98)
	pt3dadd(117.327, -271.539, 17.2, 0.98)
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  }
}
proc shape3d_18() {
  dend[18] {	pt3dadd(124.808, -312.117, 16.96, 0.6)
	pt3dadd(125.034, -312.591, 16.96, 0.6)
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  }
}
proc shape3d_19() {
  dend[20] {	pt3dadd(-56.353, -14.622, -17.6, 1.76)
	pt3dadd(-57.008, -14.859, -17.6, 1.76)
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  }
}
proc shape3d_20() {
  dend[20] {	pt3dadd(-127.893, -70.534, -2, 1.76)
	pt3dadd(-128.334, -70.771, -2, 1.76)
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  }
}
proc shape3d_21() {
  dend[21] {	pt3dadd(-199.219, -141.781, -18.4, 0.98)
	pt3dadd(-199.648, -142.255, -18.4, 0.98)
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  }
}
proc shape3d_22() {
  dend[21] {	pt3dadd(-242.362, -159.951, -20, 0.98)
	pt3dadd(-242.577, -159.951, -20, 0.98)
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  }
}
proc shape3d_23() {
  dend[23] {	pt3dadd(-252.927, -195.343, 2, 0.98)
	pt3dadd(-253.142, -195.343, 2, 0.98)
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  }
}
proc shape3d_24() {
  dend[24] {	pt3dadd(-247.639, -196.755, -6.8, 1.36)
	pt3dadd(-247.639, -197.23, -6.8, 1.36)
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  }
}
proc shape3d_25() {
  dend[25] {	pt3dadd(-173.375, -49.053, -16.36, 2.3)
	pt3dadd(-174.426, -49.335, -16.36, 2.3)
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  }
}
proc shape3d_26() {
  dend[27] {	pt3dadd(-30.374, -26.656, -11.2, 1.76)
	pt3dadd(-30.815, -26.894, -11.2, 1.76)
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  }
}
proc shape3d_27() {
  dend[27] {	pt3dadd(-267.685, -127.158, -81.56, 3.6)
	pt3dadd(-268.736, -127.441, -81.56, 3.6)
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  }
}
proc shape3d_28() {
  dend[28] {	pt3dadd(-48.013, -76.252, -66.28, 3.6)
	pt3dadd(-48.601, -75.811, -66.28, 3.6)
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  }
}
proc shape3d_29() {
  dend[30] {	pt3dadd(-97.292, -158.742, -107.52, 3.6)
	pt3dadd(-97.654, -160.459, -107.52, 3.6)
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  }
}
proc shape3d_30() {
  dend[31] {	pt3dadd(-69.562, -37.516, -12.4, 2.14)
	pt3dadd(-71.325, -38.928, -12.4, 2.14)
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  }
}
proc shape3d_31() {
  dend[32] {	pt3dadd(-171.692, -112.299, 7.6, 0.98)
	pt3dadd(-172.132, -112.536, 7.6, 0.98)
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  }
}
proc shape3d_32() {
  dend[32] {	pt3dadd(-231.796, -154.527, 25.2, 0.98)
	pt3dadd(-232.011, -154.764, 25.2, 0.98)
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  }
}
proc shape3d_33() {
  dend[32] {	pt3dadd(-279.912, -197.591, 46, 0.98)
	pt3dadd(-280.07, -198.089, 46, 0.98)
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  }
}
proc shape3d_34() {
  dend[34] {	pt3dadd(-207.795, -125.509, -2.4, 0.98)
	pt3dadd(-208.021, -125.509, -2.4, 0.98)
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  }
}
proc shape3d_35() {
  dend[35] {	pt3dadd(-162.674, -122.91, 13.2, 0.98)
	pt3dadd(-163.115, -123.384, 13.2, 0.98)
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  }
}
proc shape3d_36() {
  dend[36] {	pt3dadd(-205.377, -203.128, 13.2, 0.98)
	pt3dadd(-205.592, -203.592, 13.2, 0.98)
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  }
}
proc shape3d_37() {
  dend[37] {	pt3dadd(-201.851, -167.262, 13.2, 0.98)
	pt3dadd(-202.292, -167.737, 13.2, 0.98)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
}

proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma $o2 = new NetCon (&v(1), $o1)
	//alternative statement		$o1.soma pre_list.append(new NetCon(soma.v(1),syn,0,Delsyn,0))
	}

	objref syn
	objref DistalSynapses 
	objref DistalSynapsePositions 
	objref ProximalSynapses 
	objref ProximalSynapsePositions 
	proc synapse() {
	
  
 // //***** PP syn   
 
DistalSynapses = new Vector(0,0) 
DistalSynapses .append(1, 2, 3, 4, 5, 6, 7, 8, 9,12,13,14,15,16,17,18,20,21,22,23,24,25,27,28,29,30,32,34,35,36,37) 
DistalSynapsePositions = new Vector(0,0) 
DistalSynapsePositions .append(0.98465,    0.5,    0.5,    0.5,    0.5,    0.5,    0.5,    0.5,    0.5,0.54959,0.55687,0.85428,    0.5,    0.5,    0.5,    0.5,0.87727,    0.5,    0.5,    0.5,    0.5,0.66491,0.69201,0.84799,    0.5,    0.5,0.54869,0.53909,0.58876,    0.5,    0.5) 
for i= 0 , 30 { 
dend[DistalSynapses .x[i]] syn = new Exp2Syn(DistalSynapsePositions .x[i]) // PP syn based on Greg and Staley 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0  
pre_list.append(syn) // # 0  
} 
 
 // //***** MC syn   
 
ProximalSynapses = new Vector(0,0) 
ProximalSynapses .append(0, 1,10,19,26,27,28,31) 
ProximalSynapsePositions = new Vector(0,0) 
ProximalSynapsePositions .append(0.5,    0.078147,0.37804,0.47167,    0.5,    0.018222,    0.033024, 0.1191) 
for i= 0 , 7 { 
dend[ProximalSynapses .x[i]] syn = new Exp2Syn(ProximalSynapsePositions .x[i]) // // MC syn *** Estimated 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0 
pre_list.append(syn) // #  
} 
 
 // //***** HIPP   
 
for i= 0 , 30 { 
dend[DistalSynapses .x[i]] syn = new Exp2Syn(DistalSynapsePositions .x[i]) // HIPP  
syn.tau1 = 0.5	syn.tau2 = 6	syn.e = -70 
pre_list.append(syn) // # 38 
} 
 
 // //***** BC syn   
 
soma syn = new Exp2Syn(0.5) // BC  syn syn based on Bartos 
syn.tau1 = 0.26	syn.tau2 = 5.5	syn.e = -70 
pre_list.append(syn) // # 39 
 
 // //***** Sprout   
 
for i= 0 , 7 { 
dend[ProximalSynapses .x[i]] syn = new Exp2Syn(ProximalSynapsePositions .x[i]) // // MC syn *** Estimated 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0 
pre_list.append(syn) // # 39 
} 

}
	func is_art() { return 0 }

	endtemplate GranuleCell86 
//************************************************************************************************************