/* Dentage Gyrus Granule Cell model associated with the papers: 

J. Tejada, G.M. Arisi, N. Garcia-Cairasco, A.C. Roque, Morphological alterations in newly born dentate gyrus granule cells that emerge after status epilepticus contribute to make them less excitable, PLoS ONE. 7 (2012) e40726. doi:10.1371/journal.pone.0040726.

J. Tejada, N. Garcia-Cairasco, A.C. Roque, Combined role of seizure-induced dendritic morphology alterations and spine loss in newborn granule cells with mossy fiber sprouting on the hyperexcitability of a computer model of the dentate gyrus, PLoS Comput. Biol. 10 (2014) e1003601. doi:10.1371/journal.pcbi.1003601.

julian.tejada@gmail.com - 2014  */
//Defining granule cell
	
	begintemplate GranuleCell111

// Original name on neuroMorpho.org 5-20-2011cell1-GCcontrol.CNG.swc


ndend1=43

public  pre_list, connect_pre, subsets, is_art, is_connected
public  vbc2gc, vmc2gc, vhc2gc, vgc2bc, vbc2bc, vmc2bc, vhc2bc, vgc2mc, vbc2mc, vmc2mc, vhc2mc, vgc2hc, vmc2hc
public soma, dend
public all, gcldend, pdend, mdend, ddend, somas

nst=10
	objectvar stim[nst]
double stimdur[nst], stimdel[nst], stimamp[nst]
public stim, stimdur, stimamp, stimdel
create soma[2], dend[ndend1]
objref syn, pre_list

proc init() {
	pre_list = new List()
	subsets()
	gctemp()
	synapse()
}


objref all, gcldend, pdend, mdend, ddend, somas
proc subsets(){ local i
	objref all, gcldend, pdend, mdend, ddend, somas
	all = new SectionList()
		for i=0,1   soma[i] all.append()
		for i=0, 42 dend[i] all.append()

	somas = new SectionList()
		for i=0, 1  soma[i] somas.append()

	gcldend  = new SectionList()
		dend[0] gcldend.append()
		


	pdend  = new SectionList()
		for i=1, 5  dend[i] pdend.append()
		dend[10] pdend.append()
		for i=12, 13  dend[i] pdend.append()
		dend[17] pdend.append()
		dend[23] pdend.append()
		dend[28] pdend.append()
		for i=32, 34  dend[i] pdend.append()
		


	mdend  = new SectionList()
		for i=6, 7  dend[i] mdend.append()
		dend[9] mdend.append()
		dend[14] mdend.append()
		dend[16] mdend.append()
		dend[18] mdend.append()
		for i=20, 21  dend[i] mdend.append()		  
		for i=24, 25  dend[i] mdend.append()	
		dend[29] mdend.append()
		dend[31] mdend.append()	
		for i=36, 39  dend[i] mdend.append()
		
	ddend  = new SectionList()
		
		dend[8] ddend.append()
		dend[11] ddend.append()
		dend[15] ddend.append()
		dend[19] ddend.append()
		dend[22] ddend.append()
		for i=26, 27 dend[i] ddend.append()
		dend[30] ddend.append()
		dend[35] ddend.append()
		for i=40, 42 dend[i] ddend.append()
		

}
proc gctemp() {

    
	forsec all {
		insert ccanl
	catau_ccanl = 10
	caiinf_ccanl = 5.e-6
	Ra=210
	}

	forsec somas {insert ichan2  //ildikos ichan
	gnatbar_ichan2=0.12  //original 0.030 to .055 
	gkfbar_ichan2=0.016  //original 0.015
	gksbar_ichan2=0.006
		insert borgka
	gkabar_borgka=0.012
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.002  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.005
		insert cat
	gcatbar_cat=0.000037
		insert gskch
	gskbar_gskch=0.001
		insert cagk
	gkbar_cagk=0.0006
	gl_ichan2 = 0.00004
	cm=1

} 

		forsec gcldend {insert ichan2
	gnatbar_ichan2=0.018  //original 0.015
	gkfbar_ichan2=0.004
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.003  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0075
		insert cat
	gcatbar_cat=0.000075
		insert gskch
	gskbar_gskch=0.0004
		insert cagk
	gkbar_cagk=0.0006
	gl_ichan2 = 0.00004
	cm=1}
		
		forsec pdend {insert ichan2
	gnatbar_ichan2=0.013
	gkfbar_ichan2=0.004
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0075
		insert cat
	gcatbar_cat=0.00025
		insert gskch
	gskbar_gskch=0.0002
		insert cagk
	gkbar_cagk=0.001
	gl_ichan2 = 0.000063
	cm=1.0 
        insert pas 
      g_pas = 4e-05
	}
		
	 	forsec mdend {insert ichan2
	gnatbar_ichan2=0.008
	gkfbar_ichan2=0.001
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0005
		insert cat
	gcatbar_cat=0.0005
		insert gskch
	gskbar_gskch=0.0
		insert cagk
	gkbar_cagk=0.0024
	gl_ichan2 = 0.000063

	cm=1.0 
        insert pas 
      g_pas = 4e-05}

		forsec ddend {insert ichan2
	gnatbar_ichan2=0.0
	gkfbar_ichan2=0.001
	gksbar_ichan2=0.008
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0
		insert cat
	gcatbar_cat=0.001
		insert gskch
	gskbar_gskch=0.0
		insert cagk
	gkbar_cagk=0.0024
	gl_ichan2 = 0.000063
	cm=1.0 
        insert pas 
      g_pas = 4e-05}
		
	
	forsec all {
		insert ccanl
	catau_ccanl = 10
	caiinf_ccanl = 5.e-6
	Ra=210
	}

	 forsec all {enat = 45 ekf = -90 eks = -90  ek=-90  elca=130 etca=130	 esk=-90
		 el_ichan2 =-70	cao_ccanl=2 }

// proc topol() { local i
  connect soma[1](0), soma(0)
  connect dend(0), soma(0)
  for i = 1, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  connect dend[9](0), dend[5](1)
  connect dend[10](0), dend[4](1)
  connect dend[11](0), dend[10](1)
  connect dend[12](0), dend[3](1)
  connect dend[13](0), dend[1](1)
  for i = 14, 15 connect dend[i](0), dend[i-1](1)
  connect dend[16](0), dend[14](1)
  connect dend[17](0), dend[13](1)
  for i = 18, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[17](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), dend(1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  connect dend[28](0), dend[2](1)
  for i = 29, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  for i = 33, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  for i = 37, 38 connect dend[i](0), dend[i-5](1)
  connect dend[39](0), dend[18](1)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  connect dend[42](0), dend[10](1)

  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(873.35, -462.71, 11.28, 17.5452)
	pt3dadd(873.35, -471.48, 11.28, 17.5452)
  }
  soma[1] {pt3dclear()
	pt3dadd(873.35, -462.71, 11.28, 17.5452)
	pt3dadd(873.35, -453.94, 11.28, 17.5452)
  }
  dend {pt3dclear()
	pt3dadd(873.35, -462.71, 11.28, 1.63)
	pt3dadd(864.16, -469.2, 2.89, 1.63)
	pt3dadd(863.55, -469.2, 2.89, 1.63)
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  }
}
proc shape3d_2() {
  dend[7] {	pt3dadd(769.19, -615.8, -37.06, 0.41)
	pt3dadd(769.19, -615.91, -37.06, 0.41)
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  }
}
proc shape3d_3() {
  dend[9] {	pt3dadd(784.98, -575.51, -13.09, 0.41)
	pt3dadd(784.68, -577.45, -13.09, 0.41)
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  }
}
proc shape3d_4() {
  dend[11] {	pt3dadd(713.55, -547.45, -21.08, 0.41)
	pt3dadd(713.04, -547.96, -21.08, 0.41)
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  }
}
proc shape3d_5() {
  dend[15] {	pt3dadd(729.65, -514.19, 2.89, 0.61)
	pt3dadd(728.43, -515.01, 2.89, 0.61)
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  }
}
proc shape3d_6() {
  dend[17] {	pt3dadd(840.32, -470.73, 2.89, 1.22)
	pt3dadd(839.09, -470.12, -5.09, 1.02)
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  }
}
proc shape3d_7() {
  dend[20] {	pt3dadd(722.11, -431.14, -29.07, 0.61)
	pt3dadd(721.81, -431.04, -29.07, 0.61)
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  }
}
proc shape3d_8() {
  dend[24] {	pt3dadd(819.43, -518.78, -29.07, 0.51)
	pt3dadd(818.51, -519.6, -29.07, 0.51)
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  }
}
proc shape3d_9() {
  dend[25] {	pt3dadd(838.89, -592.65, -61.03, 0.71)
	pt3dadd(838.48, -593.16, -61.03, 0.71)
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  }
}
proc shape3d_10() {
  dend[29] {	pt3dadd(785.88, -500.77, -21.08, 0.61)
	pt3dadd(785.88, -500.87, -21.08, 0.61)
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  }
}
proc shape3d_11() {
  dend[33] {	pt3dadd(818.24, -514.28, -45.05, 0.82)
	pt3dadd(817.83, -514.9, -45.05, 0.82)
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  }
}
proc shape3d_12() {
  dend[37] {	pt3dadd(813.12, -515.85, -108.97, 0.61)
	pt3dadd(813.01, -516.04, -108.97, 0.61)
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  }
}
proc shape3d_13() {
  dend[41] {	pt3dadd(738.95, -453.42, -37.06, 0.41)
	pt3dadd(736.61, -453.22, -37.06, 0.41)
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  }
}
proc shape3d_14() {
  dend[42] {pt3dadd(720.17, -541.91, -5.09, 0.51)
	pt3dadd(718.94, -542.32, -5.09, 0.51)
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  }
  
}



proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()

}

proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma $o2 = new NetCon (&v(1), $o1)
	//alternative statement		$o1.soma pre_list.append(new NetCon(soma.v(1),syn,0,Delsyn,0))
	}

	objref syn
	objref DistalSynapses 
	objref DistalSynapsePositions 
	objref ProximalSynapses 
	objref ProximalSynapsePositions 
	proc synapse() { 
 
 
 // //***** PP syn   
 
DistalSynapses = new Vector(0,0) 
DistalSynapses .append(7, 8, 9,11,15,16,19,20,21,22,24,25,26,27,30,31,35,36,37,38,40,41,42) 
DistalSynapsePositions = new Vector(0,0) 
DistalSynapsePositions .append(0.74148,0.68736,0.90487,0.83448,0.72726,0.76903,0.69567,0.93761,    0.5,    0.5,0.92656,0.87646,    0.5,    0.5,0.51709, 0.5285,0.78209,0.81908,0.86503,0.80285,0.67717,0.64479, 0.8526) 
for i= 0 , 22 { 
dend[DistalSynapses .x[i]] syn = new Exp2Syn(DistalSynapsePositions .x[i]) // PP syn based on Greg and Staley 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0  
pre_list.append(syn) // # 0  
} 
 
 // //***** MC syn   
 
ProximalSynapses = new Vector(0,0) 
ProximalSynapses .append(0, 1, 2, 3, 4, 5,10,11,12,13,14,17,23,24,25,28,29,32,42) 
ProximalSynapsePositions = new Vector(0,0) 
ProximalSynapsePositions .append(0.5,    0.5,    0.5,    0.5,    0.5,0.29657,    0.5,   0.0038791,0.12237,    0.5,    0.075611,0.11142,    0.5 ,   0.052691,    0.046502,    0.5 ,   0.041421,0.12084,  0.0040893) 
for i= 0 , 18 { 
dend[ProximalSynapses .x[i]] syn = new Exp2Syn(ProximalSynapsePositions .x[i]) // // MC syn *** Estimated 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0 
pre_list.append(syn) // #  
} 
 
 // //***** HIPP   
 
for i= 0 , 22 { 
dend[DistalSynapses .x[i]] syn = new Exp2Syn(DistalSynapsePositions .x[i]) // HIPP  
syn.tau1 = 0.5	syn.tau2 = 6	syn.e = -70 
pre_list.append(syn) // # 41 
} 
 
 // //***** BC syn   
 
soma syn = new Exp2Syn(0.5) // BC  syn syn based on Bartos 
syn.tau1 = 0.26	syn.tau2 = 5.5	syn.e = -70 
pre_list.append(syn) // # 42 
 
 // //***** Sprout   
 
for i= 0 , 18 { 
dend[ProximalSynapses .x[i]] syn = new Exp2Syn(ProximalSynapsePositions .x[i]) // // MC syn *** Estimated 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0 
pre_list.append(syn) // # 42 
} 

}
	func is_art() { return 0 }

	endtemplate GranuleCell111
//************************************************************************************************************