// DESCARTADA	DESCARTADA	DESCARTADA	DESCARTADA
// DESCARTADA	DESCARTADA	DESCARTADA	DESCARTADA
// DESCARTADA	DESCARTADA	DESCARTADA	DESCARTADA
// DESCARTADA	DESCARTADA	DESCARTADA	DESCARTADA
// DESCARTADA	DESCARTADA	DESCARTADA	DESCARTADA
// DESCARTADA	DESCARTADA	DESCARTADA	DESCARTADA
// DESCARTADA	DESCARTADA	DESCARTADA	DESCARTADA

// ************************************************************************************************************
//Defining granule cell
	begintemplate GranuleCell

// Original name on neuroMorpho.org H910-1.CNG.swc

ndend1=41
// ndend2=4
  
public  pre_list, connect_pre, subsets, is_art, is_connected
public  vbc2gc, vmc2gc, vhc2gc, vgc2bc, vbc2bc, vmc2bc, vhc2bc, vgc2mc, vbc2mc, vmc2mc, vhc2mc, vgc2hc, vmc2hc
public soma, dend
public all, gcldend, pdend, mdend, ddend, somas

nst=10
	objectvar stim[nst]
double stimdur[nst], stimdel[nst], stimamp[nst]
public stim, stimdur, stimamp, stimdel
create soma[2], dend[ndend1]
objref syn, pre_list


proc init() {
	pre_list = new List()
	subsets()
	gctemp()
// 	synapse()
}
objref all, gcldend, pdend, mdend, ddend, somas
proc subsets(){ local i
	objref all, gcldend, pdend, mdend, ddend, somas
	all = new SectionList()
		for i=0, 1  soma[i] all.append()
		for i=0, 40 dend[i] all.append()

	somas = new SectionList()
		for i=0, 1  soma[i] somas.append()
	

	gcldend  = new SectionList()
		dend[0] gcldend.append()
		dend[3] gcldend.append()
		dend[38] gcldend.append()


	pdend  = new SectionList()
// 		dend[3] pdend.append()
		for i=5, 6  dend[i] pdend.append()
		dend[39] pdend.append()
		


	mdend  = new SectionList()
		for i=8, 11  dend[i] mdend.append()
		for i=13, 14  dend[i] mdend.append()
		for i=16, 18  dend[i] mdend.append()
		dend[20] mdend.append()
		for i=25, 27  dend[i] mdend.append()
		for i=30, 31  dend[i] mdend.append()
		dend[33] mdend.append()
		dend[40] mdend.append()
		
		

	ddend  = new SectionList()
		
		for i=1, 2 dend[i] ddend.append()
		dend[4] ddend.append()
		dend[7] ddend.append()
		dend[12] ddend.append()
		dend[15] ddend.append()
		dend[19] ddend.append()
		for i=21, 24 dend[i] ddend.append()
		for i=28, 29 dend[i] ddend.append()
		dend[32] ddend.append()
		for i=34, 37 dend[i] ddend.append()

}
proc gctemp() {

    
	forsec all {
		insert ccanl
	catau_ccanl = 10
	caiinf_ccanl = 0.000005
	Ra=210
	}

	forsec somas {insert ichan2  //ildikos ichan
	gnatbar_ichan2=0.12  //original 0.030 to .055 
	gkfbar_ichan2=0.016  //original 0.015
	gksbar_ichan2=0.006
		insert borgka
	gkabar_borgka=0.012
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.002  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.005
		insert cat
	gcatbar_cat=0.000037
		insert gskch
	gskbar_gskch=0.001
		insert cagk
	gkbar_cagk=0.0006
	gl_ichan2 = 0.00004
	cm=1

} 

		forsec gcldend {insert ichan2
	gnatbar_ichan2=0.018  //original 0.015
	gkfbar_ichan2=0.004
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.003  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0075
		insert cat
	gcatbar_cat=0.000075
		insert gskch
	gskbar_gskch=0.0004
		insert cagk
	gkbar_cagk=0.0006
	gl_ichan2 = 0.00004
	cm=1}
		
		forsec pdend {insert ichan2
	gnatbar_ichan2=0.013 
	gkfbar_ichan2=0.004
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0075
		insert cat
	gcatbar_cat=0.00025
		insert gskch
	gskbar_gskch=0.0002
		insert cagk
	gkbar_cagk=0.001
	gl_ichan2 = 0.000063
	cm=1.0 
        insert pas 
      g_pas = 4e-05
	}
		
	 	forsec mdend {insert ichan2
	gnatbar_ichan2=0.008 
	gkfbar_ichan2=0.001
	gksbar_ichan2=0.006
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0005
		insert cat
	gcatbar_cat=0.0005
		insert gskch
	gskbar_gskch=0.0
		insert cagk
	gkbar_cagk=0.0024
	gl_ichan2 = 0.000063

	cm=1.0 
        insert pas 
      g_pas = 4e-05}

		forsec ddend {insert ichan2
	gnatbar_ichan2=0.008 
	gkfbar_ichan2=0.001
	gksbar_ichan2=0.008
		insert nca  // HAV-N- Ca channel
	gncabar_nca=0.001  // check to modify- original 0.004
		insert lca 
	glcabar_lca=0.0
		insert cat
	gcatbar_cat=0.001
		insert gskch
	gskbar_gskch=0.0
		insert cagk
	gkbar_cagk=0.0024
	gl_ichan2 = 0.000063
	cm=1.0 
        insert pas 
      g_pas = 4e-05}
		
	
// 	forsec all {
// 		insert ccanl
// 	catau_ccanl = 10
// 	caiinf_ccanl = 0.000005
// 	Ra=210
// 	}

	 forsec all {enat = 45 ekf = -90 eks = -90  ek=-90  elca=130 etca=130	 esk=-90
		 el_ichan2 =-70	cao_ccanl=2 }


  connect soma[1](0), soma(0)
  connect dend(0), soma(0)
  for i = 1, 2 connect dend[i](0), dend(1)
  connect dend[3](0), soma(0)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  for i = 9, 10 connect dend[i](0), dend[i-1](1)
  connect dend[11](0), dend[9](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  connect dend[14](0), dend[8](1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  for i = 23, 24 connect dend[i](0), dend[22](1)
  connect dend[25](0), dend[5](1)
  for i = 26, 28 connect dend[i](0), dend[i-1](1)
  connect dend[29](0), dend[27](1)
  connect dend[30](0), dend[26](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  connect dend[33](0), dend[25](1)
  for i = 34, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  connect dend[37](0), dend[33](1)
  connect dend[38](0), soma(0)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0, 0, 0, 12.4042)
	pt3dadd(0, 6.2, 0, 12.4042)
  }
  soma[1] {pt3dclear()
	pt3dadd(0, 0, 0, 12.4042)
	pt3dadd(0, -6.2, 0, 12.4042)
  }
  dend {pt3dclear()
	pt3dadd(0, 0, 0, 2.63)
	pt3dadd(4.76, -4.42, -1.88, 2.63)
	pt3dadd(5.32, -5.37, -1.37, 2.48)
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  }
}
proc shape3d_2() {
  dend {	pt3dadd(121.13, -120.91, 10.86, 0.93)
	pt3dadd(121.54, -120.86, 11.24, 0.93)
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  }
}
proc shape3d_3() {
  dend[4] {	pt3dadd(-2.8, 60.43, -12.58, 2.17)
	pt3dadd(-3.18, 61.98, -12.9, 2.17)
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  }
}
proc shape3d_4() {
  dend[4] {	pt3dadd(47.07, 267.14, -65.07, 0.62)
	pt3dadd(47.27, 268.33, -65.08, 0.62)
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  }
}
proc shape3d_5() {
  dend[7] {	pt3dadd(-69.66, 209.06, -4.12, 0.77)
	pt3dadd(-70.61, 208.84, -4.91, 0.77)
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  }
}
proc shape3d_6() {
  dend[11] {	pt3dadd(-4.55, 170.03, 45.74, 0.92)
	pt3dadd(-3.51, 171.02, 46.72, 0.92)
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  }
}
proc shape3d_7() {
  dend[15] {	pt3dadd(-10.34, 168.1, 37.68, 0.61)
	pt3dadd(-10.32, 169.33, 38.02, 0.61)
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  }
}
proc shape3d_8() {
  dend[19] {	pt3dadd(-1.35, 192.69, 16.05, 0.92)
	pt3dadd(-1.13, 193.61, 16.06, 0.92)
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  }
}
proc shape3d_9() {
  dend[21] {	pt3dadd(-16.9, 208.59, -20.05, 1.22)
	pt3dadd(-18.26, 207.59, -20.7, 0.92)
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  }
}
proc shape3d_10() {
  dend[24] {	pt3dadd(3.95, 311.02, 25.27, 0.92)
	pt3dadd(4.48, 311.5, 25.76, 0.92)
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  }
}
proc shape3d_11() {
  dend[27] {	pt3dadd(54.84, 216.93, 10.57, 1.24)
  }
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  }
}
proc shape3d_12() {
  dend[29] {	pt3dadd(61.63, 216.27, 11.16, 0.93)
	pt3dadd(62.92, 216.1, 11.12, 0.93)
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  }
}
proc shape3d_13() {
  dend[32] {	pt3dadd(45.7, 221.58, 101.43, 0.62)
	pt3dadd(48.11, 221.64, 99.74, 0.62)
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  }
}
proc shape3d_14() {
  dend[36] {	pt3dadd(-66.24, 310.77, 8.72, 0.62)
	pt3dadd(-66.32, 311.41, 8.75, 0.62)
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  }
}
proc shape3d_15() {
  dend[38] {	pt3dadd(-6.92, -2.34, -5.06, 3.06)
	pt3dadd(-7.92, -1.99, -4.34, 3.06)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
}


proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma $o2 = new NetCon (&v(1), $o1)
	//alternative statement		$o1.soma pre_list.append(new NetCon(soma.v(1),syn,0,Delsyn,0))
	}

	objref syn
	objref DistalSynapses 
	objref DistalSynapsePositions 
	objref ProximalSynapses 
	objref ProximalSynapsePositions 
	proc synapse() {
	  
 
 // //***** PP syn   
 
DistalSynapses = new Vector(0,0) 
DistalSynapses .append(0, 1, 2, 4, 7,10,12,13,15,17,19,20,21,22,23,24,27,28,29,31,32,34,35,36,37) 
DistalSynapsePositions = new Vector(0,0) 
DistalSynapsePositions .append(0.90913,    0.5,    0.5, 0.7412,0.69776,0.66092,0.50511,0.52929,0.61825, 0.5995,0.51459,0.58319,    0.5,    0.5,    0.5,    0.5,0.70887,    0.5,    0.5,0.66283,0.54966,0.53743,    0.5,    0.5,0.51702) 
for i= 0 , 24 { 
dend[DistalSynapses .x[i]] syn = new Exp2Syn(DistalSynapsePositions .x[i]) // PP syn based on Greg and Staley 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0  
pre_list.append(syn) // # 0  
} 
 
 // //***** MC syn   
 
ProximalSynapses = new Vector(0,0) 
ProximalSynapses .append(0, 3, 4, 5,38,39,40) 
ProximalSynapsePositions = new Vector(0,0) 
ProximalSynapsePositions .append(0.11889,    0.5,    0.010297,    0.074091,    0.5,   0.0082819,   0.0050751) 
for i= 0 , 6 { 
dend[ProximalSynapses .x[i]] syn = new Exp2Syn(ProximalSynapsePositions .x[i]) // // MC syn *** Estimated 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0 
pre_list.append(syn) // #  
} 
 
 // //***** HIPP   
 
for i= 0 , 24 { 
dend[DistalSynapses .x[i]] syn = new Exp2Syn(DistalSynapsePositions .x[i]) // HIPP  
syn.tau1 = 0.5	syn.tau2 = 6	syn.e = -70 
pre_list.append(syn) // # 31 
} 
 
 // //***** BC syn   
 
soma syn = new Exp2Syn(0.5) // BC  syn syn based on Bartos 
syn.tau1 = 0.26	syn.tau2 = 5.5	syn.e = -70 
pre_list.append(syn) // # 32 
 
 // //***** Sprout   
 
for i= 0 , 6 { 
dend[ProximalSynapses .x[i]] syn = new Exp2Syn(ProximalSynapsePositions .x[i]) // // MC syn *** Estimated 
syn.tau1 = 1.5	syn.tau2 = 5.5	syn.e = 0 
pre_list.append(syn) // # 32 
} 
	   


	}
	func is_art() { return 0 }
	

	endtemplate GranuleCell
//************************************************************************************************************